PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'Block Type': '2', 'Condition': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = exp
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Routines
  Routine trial
    TextComponent Instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = In this task you will review sets of objects in triplets. Your task is to pay attention to where and when these objects appear. Press the spacebar to begin
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    KeyboardComponent start
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine MethodCheck
    CodeComponent methodc_code
      Code Type = Both
      End JS Routine:
        if ((MethodMouse.clicked_name[0] == methodAns)) {
            thisExp.addData("methodCheck", "1");
        } else {
            thisExp.addData("methodCheck", "0");
        }
        thisExp.addData("Method_Clicked", MethodMouse.clicked_name);
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Was this set same or different as the previous set?
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    TextComponent sameText
      letterHeight = 0.03
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Same
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    TextComponent diffText
      letterHeight = 0.03
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = Different
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    PolygonComponent leftCL
      fillColor = $[0,0,0]
      lineWidth = 3
      opacity = 0.5
      pos = (-.2, -.3)
      shape = rectangle
      size = (-0.2, -0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent rightCL
      fillColor = $[0,0,0]
      lineWidth = 3
      opacity = 0.5
      pos = (0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent MethodMouse
      clickable = rightCL,leftCL
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine second_view
    CodeComponent secondw_code
      Code Type = Auto->JS
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    ImageComponent img1
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent img2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent img3
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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  Routine first_view
    CodeComponent firstw_code
      Code Type = Auto->JS
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      Begin Experiment:
        eTrials = 0
    ImageComponent Triplet1
      image [set every repeat] = $triplet1
      pos [set every repeat] = $firstPos
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet2
      image [set every repeat] = $triplet2
      pos [set every repeat] = $secondPos
      size = (0.3, 0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    ImageComponent Triplet3
      image [set every repeat] = $triplet3
      pos [set every repeat] = $thirdPos
      size = (0.3, 0.3)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
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  Routine initCode
    CodeComponent randomizeImages
      Code Type = Auto->JS
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  Routine RetrievalImage
    CodeComponent retimg_c
      Code Type = Auto->JS
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    ImageComponent retIMG
      image [set every repeat] = $retrievalImage
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine old_new_q
    CodeComponent oldnew_c
      Code Type = Auto->JS
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    TextComponent question
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Is this object old or new?
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    PolygonComponent oldans
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (-0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent newans
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0.2, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent old_text
      letterHeight = 0.03
      pos = (-0.2, -0.3)
      startVal [time (s)] = 0.0
      text = Old
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    TextComponent new_text
      letterHeight = 0.03
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
      text = New
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    MouseComponent mouse_2
      clickable = oldans, newans
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine decision
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        print(expInfo['Condition'])
        print(expInfo)
        if expInfo['Condition'] == '1':
            TestQuestion = "Where did you see this object?"
        elif expInfo['Condition'] == '2':
            TestQuestion = "When did you see this object?"
    TextComponent decisionQ
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $TestQuestion
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  Routine TestQuestion
    CodeComponent code_6
      Code Type = Py
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine endscreen
  Routine EndScreen
    TextComponent end
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participating!
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  Routine mask
    ImageComponent Mask
      image = images/Mask.png
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine Decision
    CodeComponent code_dec
      Code Type = Auto->JS
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      End Routine:
        decTrials = decTrials + 1
    TextComponent decisionQ_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $TestQuestion
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    PolygonComponent first_left
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (-0.3, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent second_middle
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent third_right
      fillColor = $[1,1,1]
      lineWidth = 3
      opacity = 0.5
      pos = (0.3, -0.3)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Ans_1
      letterHeight = 0.03
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Ans1
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    TextComponent Ans_2
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Ans2
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    TextComponent Ans_3
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Ans3
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    MouseComponent Order_Position_Response
      clickable = first_left,second_middle,third_right
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Question1Text
    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Is this object old or new?
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  Routine methodQText
    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Was this set same or different as the previous set?
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  Routine Q2Text
    CodeComponent q_code
      Code Type = Auto->JS
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    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $TestQuestion
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  Routine initRecallPics
    CodeComponent recall_C
      Code Type = Auto->JS
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  Routine codeJS
    CodeComponent code_JS
      Code Type = Auto->JS
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Flow
  Routine codeJS
  Routine initCode
  Routine trial
  LoopInitiator EncodingTrials loopType="TrialHandler"
    loopType = random
    nReps = numEncoding
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    Routine first_view
    Routine mask
    Routine second_view
    Routine methodQText
    Routine MethodCheck
  LoopTerminator EncodingTrials
  Routine initRecallPics
  LoopInitiator RetrievalTrials loopType="TrialHandler"
    loopType = sequential
    nReps = numRetrieval
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    Routine RetrievalImage
    Routine Question1Text
    Routine old_new_q
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = count
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      Routine Q2Text
      Routine Decision
    LoopTerminator trials
  LoopTerminator RetrievalTrials
  Routine EndScreen
